PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1470, 956]
  expName = PsychoPy-Practice-Task
  keyboardBackend = ioHub
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Routines
  Routine setUp
    CodeComponent setUpCode
      Code Type = Auto->JS
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      Begin Experiment:
        import random

        # Initialize variables
        volume_counter = 1
        volume_total = 138 # (10.0 sec x 3) + (6.0 sec x 12) + (3.0 sec x 12)

        start_time = 0
        current_time = 0

        # Create clocks to keep track of the time
        timer = core.Clock()

        # Create a global clock
        Time_Since_Run = core.Clock()

        cross_time = 6.0 # Fixation cross duration
        image_time = 3.0 # Stimulus duration
        key_board_time = 3.0 # Keyboard response duration during trial

        Block_1_Run = 1

        # Create counters
        block_loop_trials_counter = 0 # counter for trials in block loops
        encode_trials_counter = 0 # counter for encode trials
        recognition_trials_counter = 0 # counter for recognition trials
        Block_Loop_Voulme_Counter = [] # To reset volume counter

        # Initialize the current encoding, recognition, and jitter indices for tracking the current image position and jitter time
        current_encode_index = 0
        current_recog_index = 0
        current_jitter_index = 0

        # Initialize the current encoding key index for tracking the list condition in Encoding_Dictionary_Block_1_Run_1
        current_encode_key_index = 0

        # Set flags for instruction display based on block and condition
        Block_1_Run_1_Started = True # Assuming Block 1 Run 1 is first
        Block_2_Run_2_Started = False # DELETE?
        Block_3_Run_3_Started = False # DELETE?
        Fix_Cross_Started = False # Becomes true after first stimulus
        Encoding_Started = True # Encoding condition always first
        Recognition_Started = False
  Routine condLoader
    CodeComponent condLoaderCode
      Code Type = Auto->JS
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      Begin Experiment:
        import pandas as pd
        import random

        #BLOCK 1 RUN 1
        # Load encoding and recognition conditions and store in dataframe (df)
        Block_1_Run_1_Conditions_file = 'conditions.xlsx'
        Block_1_Run_1_Conditions_df = pd.read_excel(Block_1_Run_1_Conditions_file)

        # Load encoding conditions
        Face_Encoding_Block_1_Run_1_file = Block_1_Run_1_Conditions_df.loc[0, 'cond_file']
        Place_Encoding_Block_1_Run_1_file  = Block_1_Run_1_Conditions_df.loc[1, 'cond_file']
        Pair_Encoding_Block_1_Run_1_file= Block_1_Run_1_Conditions_df.loc[2, 'cond_file']

        # Load recognition conditions
        Face_Recog_Block_1_Run_1_file = Block_1_Run_1_Conditions_df.loc[3, 'cond_file']
        Place_Recog_Block_1_Run_1_file = Block_1_Run_1_Conditions_df.loc[4, 'cond_file']
        Pair_Recog_Block_1_Run_1_file = Block_1_Run_1_Conditions_df.loc[5, 'cond_file']

        # Store encoding conditions in dataframe (df)
        Face_Encoding_Stimuli_Block_1_Run_1_df = pd.read_excel(Face_Encoding_Block_1_Run_1_file)
        Place_Encoding_Stimuli_Block_1_Run_1_df = pd.read_excel(Place_Encoding_Block_1_Run_1_file)
        Pair_Encoding_Stimuli_Block_1_Run_1_df = pd.read_excel(Pair_Encoding_Block_1_Run_1_file)

        # Store recognition conditions in dataframe (df)
        Face_Recog_Stimuli_Block_1_Run_1_df = pd.read_excel(Face_Recog_Block_1_Run_1_file)
        Place_Recog_Stimuli_Block_1_Run_1_df = pd.read_excel(Place_Recog_Block_1_Run_1_file)
        Pair_Recog_Stimuli_Block_1_Run_1_df = pd.read_excel(Pair_Recog_Block_1_Run_1_file)

        # Create encoding list of images conditions
        Face_Encoding_Images_Block_1_Run_1 = Face_Encoding_Stimuli_Block_1_Run_1_df["encoding_stims"].tolist()
        Place_Encoding_Images_Block_1_Run_1 = Place_Encoding_Stimuli_Block_1_Run_1_df["encoding_stims"].tolist()
        Pair_Encoding_Images_Block_1_Run_1 = Pair_Encoding_Stimuli_Block_1_Run_1_df["encoding_stims"].tolist()

        # Create recognition list of images conditions
        Face_Recog_Images_Block_1_Run_1 = Face_Recog_Stimuli_Block_1_Run_1_df["recog_stims"].tolist()
        Place_Recog_Images_Block_1_Run_1 = Place_Recog_Stimuli_Block_1_Run_1_df["recog_stims"].tolist()
        Pair_Recog_Images_Block_1_Run_1 = Pair_Recog_Stimuli_Block_1_Run_1_df["recog_stims"].tolist()

        # Randomize each list
        # BLOCK 1 RUN 1
        random.shuffle(Face_Encoding_Images_Block_1_Run_1)
        random.shuffle(Place_Encoding_Images_Block_1_Run_1)
        random.shuffle(Pair_Encoding_Images_Block_1_Run_1)

        random.shuffle(Face_Recog_Images_Block_1_Run_1)
        random.shuffle(Place_Recog_Images_Block_1_Run_1)
        random.shuffle(Pair_Recog_Images_Block_1_Run_1)

        # Create a dictionary for encoding with keys for face, place, and pair encoding images
        # and their respective randomized lists as values for Block 1 Run 1
        Encoding_Dictionary_Block_1_Run_1 = {
            'Face_Encode_Key_Block_1_Run_1': Face_Encoding_Images_Block_1_Run_1,
            'Place_Encode_Key_Block_1_Run_1': Place_Encoding_Images_Block_1_Run_1,
            'Pair_Encode_Key_Block_1_Run_1': Pair_Encoding_Images_Block_1_Run_1
        }

        # Create a dictionary for recognition with keys for face, place, and pair recognition images
        # and their respective randomized lists as values for Block 1 Run 1
        Recognition_Dictionary_Block_1_Run_1 = {
            'Face_Recog_Key_Block_1_Run_1': Face_Recog_Images_Block_1_Run_1,
            'Place_Recog_Key_Block_1_Run_1': Place_Recog_Images_Block_1_Run_1,
            'Pair_Recog_Key_Block_1_Run_1': Pair_Recog_Images_Block_1_Run_1
        }
      Begin Routine:
        import random

        # BLOCK 1 RUN 1
        # Create a list of encoding dictionary keys and shuffle them
        Encode_Key_List_Block_1_Run_1 = list(Encoding_Dictionary_Block_1_Run_1.keys())
        random.shuffle(Encode_Key_List_Block_1_Run_1 )

        # Get a random encoding key and its corresponding encoding list from the shuffled keys
        Random_Encode_Key_Block_1_Run_1 = Encode_Key_List_Block_1_Run_1[current_encode_key_index]
        Random_Encode_List_Block_1_Run_1 = Encoding_Dictionary_Block_1_Run_1[Random_Encode_Key_Block_1_Run_1]

        # Determine the corresponding recognition key based on the chosen encoding key
        if Random_Encode_Key_Block_1_Run_1  == 'Face_Encode_Key_Block_1_Run_1':
            Recog_Key_Block_1_Run_1 = 'Face_Recog_Key_Block_1_Run_1'
        elif Random_Encode_Key_Block_1_Run_1 == 'Place_Encode_Key_Block_1_Run_1':
            Recog_Key_Block_1_Run_1 = 'Place_Recog_Key_Block_1_Run_1'
        elif Random_Encode_Key_Block_1_Run_1 == 'Pair_Encode_Key_Block_1_Run_1':
            Recog_Key_Block_1_Run_1 = 'Pair_Recog_Key_Block_1_Run_1'

        # Get the corresponding recognition list based on the determined recognition key
        Recog_List_Block_1_Run_1 = Recognition_Dictionary_Block_1_Run_1[Recog_Key_Block_1_Run_1]
  Routine triggerSync
    CodeComponent triggerSyncCode
      Code Type = Auto->JS
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      Begin Routine:
        trigger_sync_message = "+"
        if volume_counter == 1:
            trigger_sync_message = "Waiting for scanner..."
    TextComponent triggerSyncText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $trigger_sync_message
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    KeyboardComponent triggerSync_Key_Resp
      allowedKeys = '5','t','s'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine InstructionsText
    CodeComponent InstructionCode
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy.hardware import keyboard
        from psychopy import core

        # Function to set instruction message and time
        def set_instruction_time_and_message(Block_1_Run_1_Started, Block_2_Run_2_Started, Block_3_Run_3_Started,
                                             Encoding_Started, Recognition_Started,
                                             Random_Encode_Key_Block_1_Run_1, Recog_Key_Block_1_Run_1
                                             ):

            # Initialize variables
            Instruction_Message = " "
            Instruction_Time = 10.0  # Instruction screen time

            # Block logic
            blocks_started = [Block_1_Run_1_Started, Block_2_Run_2_Started, Block_3_Run_3_Started]
            random_encode_keys = [Random_Encode_Key_Block_1_Run_1]
            recog_keys = [Recog_Key_Block_1_Run_1]

            for i in range(len(blocks_started)):
                if blocks_started[i] and not any(blocks_started[:i] + blocks_started[i+1:]):
                    if Encoding_Started:
                        if random_encode_keys[i] == f'Face_Encode_Key_Block_{i+1}_Run_{i+1}':
                            Instruction_Message = Face_Encoding_Text
                        elif random_encode_keys[i] == f'Place_Encode_Key_Block_{i+1}_Run_{i+1}':
                            Instruction_Message = Place_Encoding_Text
                        elif random_encode_keys[i] == f'Pair_Encode_Key_Block_{i+1}_Run_{i+1}':
                            Instruction_Message = Pair_Encoding_Text

                    elif Recognition_Started:
                        if recog_keys[i] == f'Face_Recog_Key_Block_{i+1}_Run_{i+1}':
                            Instruction_Message = Face_Recog_Text
                        elif recog_keys[i] == f'Place_Recog_Key_Block_{i+1}_Run_{i+1}':
                            Instruction_Message = Place_Recog_Text
                        elif recog_keys[i] == f'Pair_Recog_Key_Block_{i+1}_Run_{i+1}':
                            Instruction_Message = Pair_Recog_Text

            return Instruction_Time, Instruction_Message



        kb = keyboard.Keyboard()
        timer_key = core.Clock()
        start_time_key = 0
        current_time_key = 0

        # Text for encoding instruction screen
        # Face encoding condition text
        Face_Encoding_Text = """
        Male or female?

        Index = male
        Middle = female



        """
        # Place encoding condition text
        Place_Encoding_Text = """
        Is there water in the scene?

        Index = yes
        Middle = no

        """

        # Pair encoding condition text
        Pair_Encoding_Text = """
        Does the face "fit" with the scene?

        Index = yes
        Middle = no

        """

        # Text for recognition instruction screen
        # Face recognition condition text
        Face_Recog_Text = """
        Was this face shown before?

        Index = yes
        Middle = no

        """
        # Place recognition condition text
        Place_Recog_Text = """
        Was this scene shown before?

        Index = yes
        Middle = no

        """

        # Pair recognition condition text
        Pair_Recog_Text = """
        Was this face shown together with this scene before?

        Index = yes
        Middle = no

        """
      Begin Routine:
        if(volume_counter == 1):
            start_time = timer.getTime();

        # Set Instruction Message and time to 10.0 if not fixation cross
        Instruction_Time, Instruction_Message = set_instruction_time_and_message(
            Block_1_Run_1_Started, Block_2_Run_2_Started, Block_3_Run_3_Started,
            Encoding_Started, Recognition_Started,
            Random_Encode_Key_Block_1_Run_1, Recog_Key_Block_1_Run_1

        )

        current_time = timer.getTime() - start_time
        thisExp.addData('start_time',current_time)

        thisExp.addData('start_volume',volume_counter)
        kb.clock.reset()  # when you want to start the timer from
        volume_counter_message = str(volume_counter)+" out of "+str(volume_total)
      Each Frame:
        # during your trial
        keys = kb.getKeys(['5','t','s'], waitRelease=True)
        for key in keys:
            if volume_counter <= 1:
                start_time_key = timer_key.getTime()
                current_time_key = timer_key.getTime() - start_time_key
            else:
                current_time_key = timer_key.getTime() - start_time_key
                start_time_key = timer_key.getTime()

            thisExp.addData('trigger_time', current_time_key)

            thisExp.addData('end_volume',volume_counter)
            volume_counter_message = str(volume_counter)+" out of "+str(volume_total)
            volume_counter += 1
            print(volume_counter_message)
    TextComponent InstructionText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every frame] = $Instruction_Message
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  Routine encodeTrial_Run1
    CodeComponent encodeTrialRun1Code
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy.hardware import keyboard
        from psychopy import core

        # Function to store encode condition status and subject response
        def update_encode_pre_recog_response_data(block_num, run_num, current_displayed_image, random_encode_key, response_key, liquid_conditions):
            gender_is_correct = None
            liquid_is_correct = None
            response_pair_fit = None

            image_gender = None
            response_gender = None
            image_water = None
            response_water = None
            response_pair_fit = None

            # Face encode condition
            if random_encode_key == f'Face_Encode_Key_Block_{block_num}_Run_{run_num}':
                 image_gender = 'male' if 'om' in current_displayed_image or 'ym' in current_displayed_image else 'female'

                 if response_key == '1':
                    response_gender = 'male'
                 elif response_key == '2':
                    response_gender = 'female'
                 else:
                    response_gender = 'none'

                 gender_is_correct = 'NO RESPONSE' if response_gender == 'none' else response_gender == image_gender

            # Place encode condition
            elif random_encode_key == f'Place_Encode_Key_Block_{block_num}_Run_{run_num}':
                image_water = 'no_liquid'
                for substr in liquid_conditions:
                    if substr in current_displayed_image:
                        image_water = 'liquid'
                        break

                if response_key == '1':
                    response_water = 'liquid'
                elif response_key == '2':
                    response_water = 'no_liquid'
                else:
                    response_water = 'none'

                liquid_is_correct = 'NO RESPONSE' if response_water == 'none' else response_water == image_water

            # Pair encode condition
            elif random_encode_key == f'Pair_Encode_Key_Block_{block_num}_Run_{run_num}':

                if response_key == '1':
                    response_pair_fit = 'fits'
                elif response_key == '2':
                    response_pair_fit = 'does_not_fit'
                else:
                    response_pair_fit = 'none'

            return gender_is_correct, liquid_is_correct, response_pair_fit, image_gender, response_gender, image_water, response_water, response_pair_fit

        kb = keyboard.Keyboard()
        timer_key = core.Clock()
        start_time_key = 0
        current_time_key = 0

        # Initialize the encoding lists to store encoding txt data
        Encoding_Data_Face_Block_1_Run_1 = []
        Encoding_Data_Place_Block_1_Run_1 = []
        Encoding_Data_Pair_Block_1_Run_1 = []

        # Initialize the encoding response data as dictionaries
        Encoding_Response_Data_Face_Block_1_Run_1 = {}
        Encoding_Response_Data_Place_Block_1_Run_1 = {}
        Encoding_Response_Data_Pair_Block_1_Run_1 = {}

        # Initialize the image_start_time variable
        image_start_time = 0
      Begin Routine:
        # Add the start time and volume counter to the data
        thisExp.addData('start_volume',volume_counter)

        kb.clock.reset()  # when you want to start the timer from
        volume_counter_message = str(volume_counter)+" out of "+str(volume_total)

        current_time_key = 0

        # Update the current_displayed_image variable
        current_displayed_image = Random_Encode_List_Block_1_Run_1[current_encode_index]

        # Add the image_file data
        thisExp.addData('image_file', current_displayed_image)

        # Add the run to the data
        thisExp.addData('run', Block_1_Run)
      Each Frame:
        # during your trial
        keys = kb.getKeys(['5','t','s'], waitRelease=True)
        for key in keys:
            if volume_counter <= 1:
                start_time_key = timer_key.getTime()
                current_time_key = timer_key.getTime() - start_time_key
            else:
                current_time_key = timer_key.getTime() - start_time_key
                start_time_key = timer_key.getTime()

            thisExp.addData('trigger_time', current_time_key)

            thisExp.addData('end_volume',volume_counter)
            volume_counter_message = str(volume_counter)+" out of "+str(volume_total)
            volume_counter += 1
            print(volume_counter_message)
      End Routine:
        # Calculate and add the end time to the data
        current_time = timer.getTime() - start_time
        thisExp.addData('end_time', current_time)

        # Record encoding response
        gender_is_correct, liquid_is_correct, pair_fit_is_correct, image_gender, response_gender, image_water, response_water, response_pair_fit = update_encode_pre_recog_response_data(
            block_num=1,
            run_num=Block_1_Run,
            current_displayed_image=current_displayed_image,
            random_encode_key=Random_Encode_Key_Block_1_Run_1,
            response_key=encodeTrialTestKeyRespRun1.keys,
            liquid_conditions=["beach2", "beach3", "city1", "citybeach10", "hills13","hills15"]
        )

        # Save encoding responses to output
        if gender_is_correct is not None:
            thisExp.addData('image_gender', image_gender)
            thisExp.addData('response_gender', response_gender)
            thisExp.addData('gender_is_correct', gender_is_correct)

        if liquid_is_correct is not None:
            thisExp.addData('image_water', image_water)
            thisExp.addData('response_water', response_water)
            thisExp.addData('liquid_is_correct', liquid_is_correct)

        if response_pair_fit is not None:
            thisExp.addData('response_pair_fit', response_pair_fit)

        # For resetting volume_counter based on Block loop iteration
        Block_Loop_Voulme_Counter.append(Block1Loop.thisRepN)

        # Increment the current encode index to iterate over images
        current_encode_index += 1

        if current_encode_index == 1: # First stimulus is shown
            Fix_Cross_Started = True # Next ISI is '+'
            encode_trials_counter += 1

        if current_encode_index == 12: # Last stimulus is shown

            current_encode_index = 0 # Reset stimulus counter
            current_encode_key_index += 1 # Next encode condition
            current_jitter_index = 0 # Reset current jitter index

            Encoding_Started = False # End of encoding
            Fix_Cross_Started = False # Next ISI is instructions
            Recognition_Started = True # Start of recognition


            if current_encode_key_index == 3: # At last encoding condition
                current_encode_key_index = 0 # Reset encode condition order
            else:
                Random_Encode_Key_Block_1_Run_1 = Encode_Key_List_Block_1_Run_1[current_encode_key_index]
                Random_Encode_List_Block_1_Run_1 = Encoding_Dictionary_Block_1_Run_1[Random_Encode_Key_Block_1_Run_1]

        if Fix_Cross_Started == True:
            current_jitter_index += 1
    ImageComponent encodeTrialRun1_Image
      image [set every frame] = $Random_Encode_List_Block_1_Run_1[current_encode_index]
      size = (1.33, 1.0)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    TextComponent encodeFixationText_Run1
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 6.0
      text [set every frame] = +
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    KeyboardComponent encodeTrialTestKeyRespRun1
      allowedKeys = '1','2'
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
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  Routine recognitionTrial_Run1
    CodeComponent recognitonTrialRun1Code
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy.hardware import keyboard
        from psychopy import core

        # Function to store recognition response for d-prime
        def d_prime(image_old_new, response_key):
            is_correct = None

            # "OLD" images condition
            if image_old_new == "OLD":
                if response_key == '1':
                    is_correct = 'HIT'
                elif response_key == '2':
                    is_correct = 'MISS'
                else:
                    is_correct = 'NO RESPONSE'

            # "NEW" images condition
            elif image_old_new == "NEW":
                if response_key == '1':
                    is_correct = 'FALSE ALARM'
                elif response_key == '2':
                    is_correct = 'CORRECT REJECTION'
                else:
                    is_correct = "NO RESPONSE"

            return is_correct

        # Function to update encoding and recognition txt lists based on d - prime
        def update_encoding_recognition_response_data(
            block_num,
            run_num,
            is_correct,
            current_displayed_image,
            recog_key,
            image_start_time,
            image_time,
            recog_response_data_face,
            recog_response_data_place,
            recog_response_data_pair,
            encoding_response_data_face,
            encoding_response_data_place,
            encoding_response_data_pair
        ):

            # If the response is correct
            if is_correct == 'HIT' or is_correct == 'CORRECT REJECTION':
                # Add to txt only if responses are correct
                if recog_key == f'Face_Recog_Key_Block_{block_num}_Run_{run_num}':
                    recog_response_data_face.append([image_start_time, image_time, 1.000])
                elif recog_key == f'Place_Recog_Key_Block_{block_num}_Run_{run_num}':
                    recog_response_data_place.append([image_start_time, image_time, 1.000])
                elif recog_key == f'Pair_Recog_Key_Block_{block_num}_Run_{run_num}':
                    recog_response_data_pair.append([image_start_time, image_time, 1.000])

            else:
                # If the response is incorrect or no response, remove the data for the image from encoding txt response

                # Modify the recognition image path to match the encoding phase image path
                encoding_image_path = current_displayed_image.replace('_Recog', '_Encoding')

                if recog_key == f'Face_Recog_Key_Block_{block_num}_Run_{run_num}':
                    if encoding_image_path in encoding_response_data_face:
                        encoding_response_data_face.pop(encoding_image_path, None)
                elif recog_key == f'Place_Recog_Key_Block_{block_num}_Run_{run_num}':
                    if encoding_image_path in encoding_response_data_place:
                        encoding_response_data_place.pop(encoding_image_path, None)
                elif recog_key == f'Pair_Recog_Key_Block_{block_num}_Run_{run_num}':
                    if encoding_image_path in encoding_response_data_pair:
                        encoding_response_data_pair.pop(encoding_image_path, None)


        # Create a keyboard object and a timer for the keyboard
        kb = keyboard.Keyboard()
        timer_key = core.Clock()

        start_time_key = 0
        current_time_key = 0

        # Initialize the recognition lists to store recognition data
        Recog_Data_Face_Block_1_Run_1 = []
        Recog_Data_Place_Block_1_Run_1 = []
        Recog_Data_Pair_Block_1_Run_1 = []

        # Initialize the encoding lists to store encoding txt data based on recognition responses
        Recog_Response_Data_Face_Block_1_Run_1 = []
        Recog_Response_Data_Place_Block_1_Run_1 = []
        Recog_Response_Data_Pair_Block_1_Run_1 = []
      Begin Routine:
        # Add the start time and volume counter to the data
        thisExp.addData('start_volume', volume_counter)

        # Reset the keyboard clock
        kb.clock.reset()  # when you want to start the timer from

        # Set the volume counter message
        volume_counter_message = str(volume_counter) + " out of " + str(volume_total)

        current_time_key = 0

        # Update the current_displayed_image variable
        current_displayed_image = Recog_List_Block_1_Run_1[current_recog_index]

        # Add the current_displayed_image to the data
        thisExp.addData('image_file', current_displayed_image)

        # Add the run to the data
        thisExp.addData('run', Block_1_Run)
      Each Frame:
        # during your trial
        keys = kb.getKeys(['5','t','s'], waitRelease=True)
        for key in keys:
            if volume_counter <= 1:
                start_time_key = timer_key.getTime()
                current_time_key = timer_key.getTime() - start_time_key
            else:
                current_time_key = timer_key.getTime() - start_time_key
                start_time_key = timer_key.getTime()

            thisExp.addData('trigger_time', current_time_key)

            thisExp.addData('end_volume',volume_counter)
            volume_counter_message = str(volume_counter)+" out of "+str(volume_total)
            volume_counter += 1
            print(volume_counter_message)
      End Routine:
        # Calculate and add the end time to the data
        current_time = timer.getTime() - start_time
        thisExp.addData('end_time', current_time)

        # Get the image OLD/NEW status and determine if the response is correct
        image_name = Recog_List_Block_1_Run_1[current_recog_index]
        if 'OLD' in image_name:
            image_old_new = "OLD"
        else:
            image_old_new = "NEW"
        # Add the image_old_new data to the experiment handler before response_old_new
        thisExp.addData('image_old_new', image_old_new)

        # Get the participant's response for the recognition trial
        if recogTrialTestKeyRespRun1.keys == '1':
            response_old_new = "OLD"
        elif recogTrialTestKeyRespRun1.keys == '2':
            response_old_new = "NEW"
        else:
            response_old_new = "NONE"
        # Add the response_old_new data to the experiment handler
        thisExp.addData('response_old_new', response_old_new)

        # Determine d prime and add results to the experiment handler
        is_correct = d_prime(image_old_new=image_old_new, response_key=recogTrialTestKeyRespRun1.keys)
        thisExp.addData('is_correct', is_correct)

        # Update encoding and recognition txt response list
        update_encoding_recognition_response_data(
            block_num=1, # Change based on block number
            run_num=Block_1_Run,  # Change based on run number
            is_correct=is_correct,
            current_displayed_image=current_displayed_image,
            recog_key=Recog_Key_Block_1_Run_1, # Change based on Block and condition
            image_start_time=image_start_time,
            image_time=image_time,
            recog_response_data_face=Recog_Response_Data_Face_Block_1_Run_1,  # Change based on Block and condition
            recog_response_data_place=Recog_Response_Data_Place_Block_1_Run_1,  # Change based on Block and condition
            recog_response_data_pair=Recog_Response_Data_Pair_Block_1_Run_1,  # Change based on Block and condition
            encoding_response_data_face=Encoding_Response_Data_Face_Block_1_Run_1,  # Change based on Block and condition
            encoding_response_data_place=Encoding_Response_Data_Place_Block_1_Run_1,  # Change based on Block and condition
            encoding_response_data_pair=Encoding_Response_Data_Pair_Block_1_Run_1  # Change based on Block and condition
        )

        # Increment the current recognition index to iterate over images
        current_recog_index += 1

        if current_recog_index == 1: # First stimulus is shown
            Fix_Cross_Started = True # Next ISI is '+'
            recognition_trials_counter += 1

        if current_recog_index == 12: # Last stimulus is shown
            # Increment the number of trialis in block loop
            block_loop_trials_counter += 1

            Recognition_Started = False # End of recognition
            Fix_Cross_Started = False # Next ISI is instructions
            Encoding_Started = True # Start of encoding

            # Reset the current recognition index
            current_recog_index = 0

            # Reset current jitter index
            current_jitter_index = 0

            # Determine the corresponding recognition key based on the chosen encoding key
            if Random_Encode_Key_Block_1_Run_1  == 'Face_Encode_Key_Block_1_Run_1':
                Recog_Key_Block_1_Run_1 = 'Face_Recog_Key_Block_1_Run_1'
            elif Random_Encode_Key_Block_1_Run_1 == 'Place_Encode_Key_Block_1_Run_1':
                Recog_Key_Block_1_Run_1 = 'Place_Recog_Key_Block_1_Run_1'
            elif Random_Encode_Key_Block_1_Run_1 == 'Pair_Encode_Key_Block_1_Run_1':
                Recog_Key_Block_1_Run_1 = 'Pair_Recog_Key_Block_1_Run_1'

            # Get the corresponding recognition list based on the determined recognition key
            Recog_List_Block_1_Run_1 = Recognition_Dictionary_Block_1_Run_1[Recog_Key_Block_1_Run_1]


        # Iterate through jitter times if showing fixation cross and after first image
        if Fix_Cross_Started == True:
            current_jitter_index += 1

        # Reset the trial counters
        if block_loop_trials_counter == 3:
            block_loop_trials_counter = 0
            recognition_trials_counter = 0
            encode_trials_counter = 0

        # For resetting volume_counter based on Block loop iteration
        Block_Loop_Voulme_Counter.append(Block1Loop.thisRepN)

        # When Block Loop ends based on stimuli total
        if len(Block_Loop_Voulme_Counter) == 72:
            volume_counter = 1 # Reset volume_counter
            Block_Loop_Voulme_Counter = [] # Reinitalize counter
            Block_1_Run_1_Started = False # Block 1 Run 1 finished
            Encoding_Started = True # Start of encoding for next block
            Recognition_Started = False # End of recognition for next block
            Block_2_Run_2_Started = True # Begin next block DELETE?
    ImageComponent recogTrialRun1_Image
      image [set every frame] = $Recog_List_Block_1_Run_1[current_recog_index]
      size = (1.33, 1.0)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    TextComponent recogFixationText_Run1
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 6.0
      text [set every frame] = +
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    KeyboardComponent recogTrialTestKeyRespRun1
      allowedKeys = '1','2'
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
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Flow
  Routine setUp
  LoopInitiator condLoaderLoop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine condLoader
  LoopTerminator condLoaderLoop
  Routine triggerSync
  LoopInitiator Block1Loop loopType="TrialHandler"
    loopType = sequential
    nReps = 3
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    Routine InstructionsText
    LoopInitiator encodeLoop_Block1Run1 loopType="TrialHandler"
      loopType = sequential
      nReps = 12
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      Routine encodeTrial_Run1
    LoopTerminator encodeLoop_Block1Run1
    Routine InstructionsText
    LoopInitiator recognitionLoop_Block1Run1 loopType="TrialHandler"
      loopType = sequential
      nReps = 12
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      Routine recognitionTrial_Run1
    LoopTerminator recognitionLoop_Block1Run1
  LoopTerminator Block1Loop
